PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'*Participant ID ': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1366, 768]
  expName = Primed GoNogo
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Routines
  Routine trial
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        jitter = Math.random() * (1.0 - 0.5) + 0.5;

        jitter = round(jitter, 1);

        function round(value, precision) {
            var x = Math.pow(10, precision);
            return Math.round(value * x) / x;
        }
      Begin Routine:
        jitter = random() * (1.0 - 0.5) + 0.5
        jitter = round(jitter, 1) # round to 1 decimal place
      End Routine:
        StopSide.addData('jitter', jitter)
    TextComponent fixation1
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent image
      image [set every repeat] = $imageFile
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 0.1
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    KeyboardComponent earlyresp
      forceEndRoutine = False
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 1.0
      store = first key
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    TextComponent fixation2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = $jitter+0.1
      stopVal [duration (s)] = 0.9
      text = +
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    ImageComponent triangle
      image = triangle.jpg
      pos [set every repeat] = [posX, posY]
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'c', 'm'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.6
      store = first key
      storeCorrect = True
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  Routine feedback
    CodeComponent setMsg
      Code Type = Both
      Begin JS Routine:
        if(resp.corr) {
          msg='Correct!'
          msgColor='green';
        } else {
          msg='Incorrect'
          msgColor='red';
        }
      Begin Routine:
        if resp.corr:
            msg='Correct!'
            msgColor='green'
        else:
            msg='Incorrect!'
            msgColor='red'
    TextComponent feedbackText
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg
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  Routine Intructions
    TextComponent instruction
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Practice Phase:

        Please make a response every time you see a triangle.

        Before the triangle appears you will also see:
        A   circle --> press    C    after the triangle.

        A   square --> press    M    after the triangle.



        Please be as fast and accurate as you can. Try to respond every time.

        Press any key to continue onto the next instruction screen.
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine SpecInstructions
    TextComponent instrSR
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0
      text [set every repeat] = $instr
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    KeyboardComponent ready2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thankyou
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you!

        This is the end of the task.

        Press   Esc   to exit.
        You can then close this window.
  Routine Prac_Over
    TextComponent prac_over
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the end of the practice phase.

        You will now start the main experiment.

        Please pay attention every time the instruction screen
        shows up. This means that the rules are changing.

        You can take a short break when the instruction screen
        shows up before continuing with the experiment.

        The blocks will now be much longer
        and there will be 6 of them.
    KeyboardComponent pover_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine prac1_trial
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        from numpy.random import random
      Begin JS Routine:
        jitter = Math.random() * (1.0 - 0.5) + 0.5;

        jitter = round(jitter, 1);

        function round(value, precision) {
            var x = Math.pow(10, precision);
            return Math.round(value * x) / x;
        }
      Begin Routine:
        jitter = random() * (1.0 - 0.5) + 0.5
        jitter = round(jitter, 1) # round to 1 decimal place
      End Routine:
        prac_1.addData('jitter', jitter)
    TextComponent prac_fix
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent prac_im1
      image [set every repeat] = $imageFile
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 0.1
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    TextComponent prax_fix2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = $jitter+0.1
      stopVal [duration (s)] = 0.9
      text = +
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    ImageComponent image_2
      image = triangle.jpg
      pos [set every repeat] = [posX, posY] 
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent prac_resp
      allowedKeys [set every repeat] = 'c','m'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.6
      store = first key
      storeCorrect = True
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  Routine prac1_feedback
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        if(prac_resp.corr) {
          msg='Correct!'
          msgColor='green';
        } else {
          msg='Incorrect'
          msgColor='red';
        }
      Begin Routine:
        if prac_resp.corr:
            msg='Correct!'
            msgColor='green'
        else:
            msg='Incorrect!'
            msgColor='red'
    TextComponent prac_feed
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg
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  Routine Prac2_Instr
    TextComponent prac_instr_t2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now the rules change - phase 2.

        If you see a circle:
        respond with the letter  C   only if the triangle is in the middle.

        Do not press anything if the triangle is positioned on the left.


        If you see a square:
        Always respond with the letter  M

        Press any key to begin.
    KeyboardComponent instr_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine Prac1_Instr
    TextComponent prac1_instr_t
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is a short practice phase 1.
        Please follow instructions below.

        If you see a circle:
        always respond with the letter  C.

        If you see a square:
        respond with the letter  M  only if the triangle is in the middle.

        Do not press anything if the triangle is positioned on the right.

        Press any key to begin.
    KeyboardComponent instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine prac2_trial
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        jitter = Math.random() * (1.0 - 0.5) + 0.5;

        jitter = round(jitter, 1);

        function round(value, precision) {
            var x = Math.pow(10, precision);
            return Math.round(value * x) / x;
        }
      Begin Routine:
        jitter = random() * (1.0 - 0.5) + 0.5
        jitter = round(jitter, 1) # round to 1 decimal place
      End Routine:
        prac_2.addData('jitter', jitter)
    TextComponent prac2_fix
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent prac_im
      image [set every repeat] = $imageFile
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 0.1
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    TextComponent prac2_fix2
      color = black
      letterHeight = 0.07
      startVal [time (s)] = $jitter+0.1
      stopVal [duration (s)] = 0.9
      text = +
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    ImageComponent prac_img2
      image = triangle.jpg
      pos [set every repeat] = [posX, posY]
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent prac_resp2
      allowedKeys [set every repeat] = 'c','m'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = $jitter+1.0
      stopVal [duration (s)] = 0.6
      store = first key
      storeCorrect = True
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  Routine prac2_feedback
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if(prac_resp2.corr) {
          msg='Correct!'
          msgColor='green';
        } else {
          msg='Incorrect'
          msgColor='red';
        }
      Begin Routine:
        if prac_resp2.corr:
            msg='Correct!'
            msgColor='green'
        else:
            msg='Incorrect!'
            msgColor='red'
    TextComponent prac2_feed
      color [set every repeat] = $msgColor
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg
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  Routine Test_Start
    TextComponent test_instr
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        This is the main experiment phase:

        Please make a response every time you see a triangle.
        If you see:

        A   circle --> press    C    after the triangle.

        A   square --> press    M    after the triangle.



        Please be as fast and accurate as you can. Try to respond every time.

        Press any key to continue onto the next instruction screen.
    KeyboardComponent instr_resp3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine Intructions
  Routine Prac1_Instr
  LoopInitiator prac_1 loopType="TrialHandler"
    conditionsFile = pconditions1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0.1, 0)'), ('corrAns', 'none')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(-0.1, 0)'), ('corrAns', 'c')])]
    Routine prac1_trial
    Routine prac1_feedback
  LoopTerminator prac_1
  Routine Prac2_Instr
  LoopInitiator prac_2 loopType="TrialHandler"
    conditionsFile = pconditions2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'square.jpg'), ('posit', '(0.1, 0)'), ('corrAns', 'm')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(0, 0)'), ('corrAns', 'c')]),
      OrderedDict([('imageFile', 'circle.jpg'), ('posit', '(-0.1, 0)'), ('corrAns', 'none')])]
    Routine prac2_trial
    Routine prac2_feedback
  LoopTerminator prac_2
  Routine Prac_Over
  LoopInitiator Groups loopType="TrialHandler"
    conditionsFile = groups.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('countgroups', 'conditionsMaster1.csv')]),
      OrderedDict([('countgroups', 'conditionsMaster2.csv')])]
    LoopInitiator masterBlock loopType="TrialHandler"
      conditionsFile = $countgroups
      loopType = sequential
      nReps = 1
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      LoopInitiator Block1 loopType="TrialHandler"
        conditionsFile = $masterFile
        loopType = sequential
        nReps = 1
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        Routine SpecInstructions
        LoopInitiator StopSide loopType="TrialHandler"
          conditionsFile = $condFile
          loopType = random
          nReps = 1
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          Routine trial
          Routine feedback
        LoopTerminator StopSide
      LoopTerminator Block1
    LoopTerminator masterBlock
  LoopTerminator Groups
  Routine thanks
